PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Spreadsheets/screenshotspreadsheet.csv', 'Spreadsheets/wordlistspreadsheets.csv', 'video.mp4', 'Screenshots/4_long.png', 'Screenshots/4_short.png', 'Screenshots/7_long.png', 'Screenshots/7_short.png', 'Screenshots/9_long.png', 'Screenshots/9_short.png', 'Screenshots/17_long.png', 'Screenshots/17_short.png', 'Screenshots/19_long.png', 'Screenshots/19_short.png', 'Screenshots/22_long.png', 'Screenshots/22_short.png', 'Screenshots/37_long.png', 'Screenshots/37_short.png', 'Screenshots/42_long.png', 'Screenshots/42_short.png', 'Screenshots/47_long.png', 'Screenshots/47_short.png', 'Screenshots/52_long.png', 'Screenshots/52_short.png', 'Screenshots/67_long.png', 'Screenshots/67_short.png', 'Screenshots/82_long.png', 'Screenshots/82_short.png', 'Screenshots/97_long.png', 'Screenshots/97_short.png', 'Screenshots/107_long.png', 'Screenshots/107_short.png', 'Screenshots/112_long.png', 'Screenshots/112_short.png', 'Screenshots/127_long.png', 'Screenshots/127_short.png', 'Screenshots/132_long.png', 'Screenshots/132_short.png', 'Screenshots/142_long.png', 'Screenshots/142_short.png', 'Screenshots/152_long.png', 'Screenshots/152_short.png', 'Screenshots/157_long.png', 'Screenshots/157_short.png', 'Screenshots/172_long.png', 'Screenshots/172_short.png', 'Screenshots/187_long.png', 'Screenshots/187_short.png', 'Screenshots/192_long.png', 'Screenshots/192_short.png', 'Screenshots/197_long.png', 'Screenshots/197_short.png', 'Screenshots/202_long.png', 'Screenshots/202_short.png', 'Screenshots/217_long.png', 'Screenshots/217_short.png', 'Screenshots/232_long.png', 'Screenshots/232_short.png', 'Screenshots/237_long.png', 'Screenshots/237_short.png', 'Screenshots/247_long.png', 'Screenshots/247_short.png', 'Screenshots/257_long.png', 'Screenshots/257_short.png', 'Screenshots/262_long.png', 'Screenshots/262_short.png', 'Screenshots/272_long.png', 'Screenshots/272_short.png', 'Screenshots/277_long.png', 'Screenshots/277_short.png', 'Screenshots/289_long.png', 'Screenshots/289_short.png']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Please make sure you have read and consented to the ethics protocol before continuing.

        You are not allowed to use your phone at any point during this experiment unless explicitly directed to.

        Press <SPACE> to continue
    KeyboardComponent WelcomeScreenKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ConditionSelection
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    TextComponent ConditionSelectionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Who invited you to take the experiment?
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    VariableComponent ConditionVariable
      startExpValue = 0
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    ButtonComponent JacksonButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Jackson
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      callback:
        ConditionVariable = 2
        NameVariable = "Jackson"
    ButtonComponent MeganButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Megan
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      callback:
        ConditionVariable = 4
        NameVariable = "Megan"
    ButtonComponent JessicaButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Jessica
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      callback:
        ConditionVariable = 1
        NameVariable = "Jessica"
    ButtonComponent JawwadButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Jawwad
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      callback:
        ConditionVariable = 3
        NameVariable = "Jawwad"
    VariableComponent NameVariable
      startExpValue = ""
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  Routine ScreenshotOrderTask
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    ImageComponent ScreenshotLeft
      pos [set every repeat] = (-0.32, 0)
      size [set every repeat] = (0.3375, 0.6)
      startVal [time (s)] = 0.0
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    ImageComponent ScreenshotRight
      pos = (0.32, 0)
      size = (0.6, 0.3375)
      startVal [time (s)] = 0.0
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    KeyboardComponent ScreenshotKeyboard
      allowedKeys = 'a','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent ScreenshotCode
      Code Type = Auto->JS
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      Begin Routine:
        if ConditionVariable == 1 or ConditionVariable == 2:
            ScreenshotLeft.image = f"Screenshots/{Condition1Left}"
            ScreenshotRight.image = f"Screenshots/{Condition1Right}"
            ScreenshotLeft.size = (0.45, 0.8)
            ScreenshotRight.size = (0.45, 0.8)
        else:
            ScreenshotLeft.image = f"Screenshots/{Condition2Left}"
            ScreenshotRight.image = f"Screenshots/{Condition2Right}"
            ScreenshotLeft.size = (0.6, 0.3375)
            ScreenshotRight.size = (0.6, 0.3375)
      End Routine:
        if ConditionVariable == 1 or ConditionVariable == 2:
            if ScreenshotKeyboard.keys == Condition1Correct:
                thisExp.addData("Screenshot_Correct", 1)
            else:
                thisExp.addData("Screenshot_Correct", 0)

        if ConditionVariable == 3 or ConditionVariable == 4:
            if ScreenshotKeyboard.keys == Condition2Correct:
                thisExp.addData("Screenshot_Correct", 1)
            else:
                thisExp.addData("Screenshot_Correct", 0)
  Routine WordListStudy
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    TextComponent WordListStudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent WordListStudyCode
      Code Type = Auto->JS
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      Begin Routine:
        if ConditionVariable == 1 or ConditionVariable == 3:
            thisExp.addData('Study_Word', Condition1List)
            WordListStudyText.text = Condition1List
        else:
            thisExp.addData('Study_Word', Condition2List)
            WordListStudyText.text = Condition2List
  Routine WordListInstructions
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    TextComponent WordListInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the next part of the experiment, you will be shown a number of different words.

        Afterwards, you will count down from a random number by 3 out loud so that the experimenter can hear.

        You will then be shown one word that appeared at a time and be asked to rate in which position it appeared.

        For instance, the first word that appeared should be rated <1>, the second <2>, and so on.

        Press <SPACE> to continue.
    KeyboardComponent WordListInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordListTest
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    TextComponent WordListTestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click on the words in the order they appeared during the study phase.
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    CodeComponent WordListTestCode
      Code Type = Auto->JS
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      Begin Routine:
        current_button = 0
        current_label_text = 0
        clicked_button_flags = [False, False, False, False, False,
                                False, False, False, False, False]
        clicked_button_labels_in_order = []
        # Layout parameters
        num_columns = 5
        num_rows = 2
        button_gap = 0.01
        total_button_width = 1.6
        button_width = (total_button_width - (num_columns - 1) * button_gap) / num_columns
        button_height = 0.08
        row_vertical_positions = [-0.42, -0.32]

        # Create buttons and labels dynamically
        dynamic_buttons = []
        dynamic_button_texts = []

        x_position = 0
        y_position = 0
        button_rect = 0
        button_label_text = 0

        if ConditionVariable == 1 or ConditionVariable == 3:
            button_labels = ["chair", "candle", "apple", "forest", "letter", "window", "island", "ladder", "mirror", "basket"]
        else:
            button_labels = ["table", "pillow", "ocean", "eraser", "pocket", "dinner", "street", "laptop", "closet", "carpet"]

        label_index = 0
        for row_index in range(num_rows):
            for col_index in range(num_columns):
                # Use descriptive names; Builder will translate these to let in JS
                x_position = -total_button_width / 2 + button_width / 2 + col_index * (button_width + button_gap)
                y_position = row_vertical_positions[row_index]

                button_rect = visual.Rect(
                    win=win,
                    width=button_width,
                    height=button_height,
                    pos=(x_position, y_position),
                    fillColor="gray",
                    lineColor="white"
                )

                button_label_text = visual.TextStim(
                    win=win,
                    text=button_labels[label_index],
                    pos=(x_position, y_position),
                    height=0.035,
                    color="white"
                )

                dynamic_buttons.append(button_rect)
                dynamic_button_texts.append(button_label_text)

                label_index += 1
      Each Frame:
        # Draw buttons and their labels
        for button_idx in range(len(dynamic_buttons)):
            current_button = dynamic_buttons[button_idx]
            current_label_text = dynamic_button_texts[button_idx]

            # Update color if clicked
            if clicked_button_flags[button_idx]:
                current_button.fillColor = [0.5, 0.5, 0.5]  # greyed out
            else:
                current_button.fillColor = "gray"

            # Draw the button and its label
            current_button.draw()
            current_label_text.draw()

        # Detect clicks on unclicked buttons
        if mouse.getPressed()[0]:
            for button_idx in range(len(dynamic_buttons)):
                current_button = dynamic_buttons[button_idx]

                if not clicked_button_flags[button_idx] and mouse.isPressedIn(current_button):
                    clicked_button_flags[button_idx] = True
                    clicked_button_labels_in_order.append(button_labels[button_idx])

                    # Save click order to data
                    thisExp.addData(f"button_press_{len(clicked_button_labels_in_order)}", button_labels[button_idx])
                    thisExp.nextEntry()
                    break  # prevent multiple clicks in one frame

        # End routine if all buttons are clicked
        all_clicked = True
        for clicked_flag in clicked_button_flags:
            if not clicked_flag:
                all_clicked = False
                break

        if all_clicked:
            continueRoutine = False
      End Routine:
        # Disable drawing for all buttons and their labels
        for button_obj in dynamic_buttons:
            button_obj.setAutoDraw(False)

        for label_obj in dynamic_button_texts:
            label_obj.setAutoDraw(False)

        # Clear the lists so they can be garbage collected
        dynamic_buttons = []
        dynamic_button_texts = []
        clicked_button_flags = []
        clicked_button_labels_in_order = []
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine BreakOrFinish
    RoutineSettingsComponent BreakOrFinish
      skipIf = LoopVariable == 1
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    TextComponent BreakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        You will now take a 5 minute break!

        DO NOT USE YOUR PHONE DURING THIS BREAK!
    CodeComponent BreakCode
      Code Type = Auto->JS
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      End Routine:
        if ConditionVariable == 1:
            ConditionVariable = 4
        elif ConditionVariable == 2:
            ConditionVariable = 3
        elif ConditionVariable == 3:
            ConditionVariable = 2
        elif ConditionVariable == 4:
            ConditionVariable = 1

        LoopVariable = 1
        WordListVariable = []
    VariableComponent LoopVariable
      startExpValue = 0
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    KeyboardComponent SecretSkipButtonShhhhhh_2
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VideoInstructions
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    TextComponent VideoInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent VideoInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent VideoInstructionsCode
      Code Type = Auto->JS
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      Begin Routine:
        if ConditionVariable == 1 or ConditionVariable == 2:
            VideoInstructionsText.setText("Please take out your phone and go the Instagram account @psy379proj\n\n Watch every video in order from top to bottom with the volume on.\n\n You must finish each video before scrolling to the next and only watch each video once.\n\n Press <SPACE> when you are finished!")
        else:
            VideoInstructionsText.setText("You will now watch a brief video. Please do not use your phone at any point during the video.\n\nPress <SPACE> to continue.")
  Routine WordListDistraction
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    TextComponent WordListDistractionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent RandomDistractionNumber
      Code Type = Auto->JS
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      Begin Experiment:
        WordListDistractionText.setText(f"Count backwards by 3 from {randint(100,1000)} out loud.")
    KeyboardComponent SecretSkipButtonShhhhhh_3
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ScreenshotInstructions
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    TextComponent ScreenshotInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next part of the experiment, you will be shown images two at a time.

        Please indicate which one appeared first.

        Press <A> for the left image and <D> for the right image.

        Press <SPACE> to continue.
    KeyboardComponent ScreenshotInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent EndScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results
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    CodeComponent EndScreenCode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = NameVariable + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = psychoJS.experiment.getResultAsCsv();

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'sg2ZTqdg0Xss', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine Setup
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  Routine VideoScreen
    RoutineSettingsComponent VideoScreen
      skipIf = ConditionVariable <= 2
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    MovieComponent Video
      backend = ffpyplayer
      forceEndRoutine = True
      movie = video.mp4
      size = (1, 0.5625)
      startVal [time (s)] = 0.0
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    KeyboardComponent SecretSkipButtonShhhhhh
      allowedKeys = '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordListStudyInstructions
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    TextComponent WordListStudyInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the next part of the experiment, you will be shown a number of different words.

        Afterwards, you will count down from a random number by 3 out loud so that the experimenter can hear.

        Press <SPACE> to continue.
    KeyboardComponent WordListStudyInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordListStudyInstructions_2
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Flow
  Routine WelcomeScreen
  Routine ConditionSelection
  LoopInitiator WithinSubjects loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine VideoInstructions
    Routine VideoScreen
    Routine ScreenshotInstructions
    LoopInitiator ScreenshotOrderTrials loopType="TrialHandler"
      conditions = [OrderedDict([('Condition1Left', 'new1.jpg'), ('Condition1Right', 'old1.jpg'), ('Condition1Correct', 'Right'), ('Condition2Left', 'old2.jpg'), ('Condition2Right', 'new2.jpg'), ('Condition2Correct', 'Left')])]
      conditionsFile = Spreadsheets/screenshotspreadsheet.csv
      loopType = random
      nReps = 1
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      Routine ScreenshotOrderTask
    LoopTerminator ScreenshotOrderTrials
    Routine WordListInstructions
    LoopInitiator WordListStudyTrials loopType="TrialHandler"
      conditionsFile = Spreadsheets/wordlistspreadsheets.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Condition1List', 'apple'), ('Condition2List', 'banana')]),
        OrderedDict([('Condition1List', 'muffin'), ('Condition2List', 'cupcake')]),
        OrderedDict([('Condition1List', 'orange'), ('Condition2List', 'tangerine')]),
        OrderedDict([('Condition1List', 'cat'), ('Condition2List', 'dog')]),
        OrderedDict([('Condition1List', 'pizza'), ('Condition2List', 'beer')])]
      Routine WordListStudy
    LoopTerminator WordListStudyTrials
    Routine WordListDistraction
    Routine WordListTest
    Routine BreakOrFinish
  LoopTerminator WithinSubjects
  Routine EndScreen
